PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine learning_instruction
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    TextComponent learningInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $learning_inst_resp.status==FINISHED
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      text:
        In this experiment, you will be learning some new actions and their names.

        For each trial, you will see an action at the top of the screen, and two possible names below it. If the action matches the LEFT name, press 'z' on the keyboard. If the action matches the RIGHT name, press '/' on the keyboard. You will hear a 'bleep' if your answer is correct, and a 'buzz' if your answer is incorrect.

        When you are ready to start, press 's' on the keyboard.
    KeyboardComponent learning_inst_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning_trial
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    MovieComponent movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = test_stimuli/traimin.mp4
      pos = (0, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [condition] = $trial_resp.status==FINISHED
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    TextComponent text_left
      letterHeight = 0.05
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $correct.status==FINISHED
      text = 'traimin'
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    TextComponent text_right
      letterHeight = 0.05
      pos = (.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $correct.status==FINISHED
      text = 'pablize'
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    KeyboardComponent trial_resp
      allowedKeys [set every repeat] = 'z', 'slash'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    SoundComponent correct
      sound [set every repeat] = test_stimuli/bleep.wav
      startVal [condition] = $trial_resp.status==FINISHED
      stopWithRoutine = False
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  Routine testing_instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp.status==FINISHED
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      text:
        Nice job! You have completed the learning section of this experiment. Take a break before the next section if you need.

        This next section is the same as the first, however you will no longer hear any feedback when you answer. Do your best to chose the correct answer each time.

        When you are ready to start, press 's' on the keyboard.
    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testing_trial
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    MovieComponent test_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = test_stimuli/traimin_obj.mp4
      pos = (0, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $test_resp.status==FINISHED
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    TextComponent left_text
      letterHeight = 0.05
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $test_resp.status==FINISHED
      text = 'barbul'
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    TextComponent right_text
      letterHeight = 0.05
      pos = (.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $test_resp.status==FINISHED
      text = 'traimin'
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    KeyboardComponent test_resp
      allowedKeys [set every repeat] = 'z', 'slash'
      correctAns = '/'
      forceEndRoutine = True
      startVal [time (s)] = 5
      storeCorrect = True
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  Routine thank_you
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating!

        Add Survey
  Routine testing_trial_2
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    MovieComponent test_movie_2
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = test_stimuli/joicate/joicate_obj.mp4
      pos = (0, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $test_resp.status==FINISHED
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    TextComponent left_text_2
      letterHeight = 0.05
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $test_resp.status==FINISHED
      text = 'joicate'
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    TextComponent right_text_2
      letterHeight = 0.05
      pos = (.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $test_resp.status==FINISHED
      text = 'fremple'
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    KeyboardComponent test_resp_2
      allowedKeys [set every repeat] = 'z', 'slash'
      correctAns = '/'
      forceEndRoutine = True
      startVal [time (s)] = 5
      storeCorrect = True
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  Routine testing_trial_3
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    MovieComponent test_movie_3
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = test_stimuli/joicate/joicate_state.mp4
      pos = (0, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $test_resp.status==FINISHED
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    TextComponent left_text_3
      letterHeight = 0.05
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $test_resp.status==FINISHED
      text = 'pablize'
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    TextComponent right_text_3
      letterHeight = 0.05
      pos = (.25, 0)
      startVal [time (s)] = 0.0
      stopVal [condition] = $test_resp.status==FINISHED
      text = 'joicate'
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    KeyboardComponent test_resp_3
      allowedKeys [set every repeat] = 'z', 'slash'
      correctAns = '/'
      forceEndRoutine = True
      startVal [time (s)] = 5
      storeCorrect = True
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Flow
  Routine learning_instruction
  Routine learning_trial
  Routine testing_instruction
  Routine testing_trial
  Routine testing_trial_2
  Routine testing_trial_3
  Routine thank_you
