PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = norming
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stimuli/initials/batent1.mp4
      pos = (0, .25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent enter
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [condition] = $movie.status==FINISHED
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    TextboxComponent textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Describe what is happening in the video above.
      pos = (0, -.25)
      size = (0.7, 0.4)
      startVal [condition] = $movie.status==FINISHED
      stopVal [condition] = $enter.status==FINISHED
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    MovieComponent replay
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = stimuli/initials/batent1.mp4
      pos = (0, .25)
      size = (0.4, 0.4)
      startVal [condition] = movie.status==FINISHED
      stopVal [condition] = enter.status==FINISHED
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/initials/loopTemplate1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'initial': 'batent1.mp4'},
      {'initial': 'batent2.mp4'},
      {'initial': 'batent3.mp4'},
      {'initial': 'batent4.mp4'}]
    Routine trial
  LoopTerminator trials
